PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = audiobook_experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_instruction.status == FINISHED
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      text:
        En el siguiente experimento vas a escuchar dos audiolibros de 5 minutos cada uno.

        Por favor, ponete cómodo/a e intenta sostener la mirada en la cruz de fijación que aparecerá en el centro de la pantalla.

        Cuando estes listo/a apretá ESPACIO: vas a escuchar unos pitidos y luego comenzará el experimento.
  Routine SpacebarContinue
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    CodeComponent code_spacebar
      Code Type = Auto->JS
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      Begin Routine:
        audiobook_number = audiobook_trials.thisN + 1
        if audiobook_number==len(audiobook_trials.trialList):
            spacebar_text = "Presioná ESPACIO para finalizar"
        else:
            spacebar_text = "Presioná ESPACIO para escuchar la siguiente historia"
    KeyboardComponent spacebar_response
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .5
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    TextComponent spacebar_prompt
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = spacebar_response.status == FINISHED
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      text [set every repeat]:
        $spacebar_text
    ParallelOutComponent p_port_next_book
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 175
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine LastPrompt
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5'
      forceEndRoutine = True
      startVal [time (s)] = .2
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    TextComponent last_prompt_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp.status == FINISHED
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      text:
        ¡Listo!

        ¿Qué tan largo te pareció el experimento?


        Presioná un número del 1 al 5 para continuar...
    ParallelOutComponent p_port_last_prompt
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 200
      startVal [condition] = last_prompt_text.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine GoodBye
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    TextComponent congrats_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        ¡Felicitaciones!

        Terminaste el experimento.
    ParallelOutComponent p_port_goodbye
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 225
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine AudioBook
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    CodeComponent code_audiobook
      Code Type = Auto->JS
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      Begin Experiment:
        frame_change = 20
        fixation_possible_colors = [
            'white', 'orange',
            'red', 'blue',
            'green', 'yellow',
            'cyan', 'pink'
        ]
        fixation_color_ = 'white'
      Begin Routine:
        current_frame = win.getActualFrameRate()
        current_frame = 60 if current_frame is None else current_frame
        # Save data
        thisExp.addData('monitor_frameRate', current_frame)
        thisExp.addData('time_per_frame_sec', 1/current_frame)
        thisExp.addData('duration_40_frames_sec', 40 * (1/current_frame))
      Each Frame:
        if audiobook.status == FINISHED:
            continue_routine = False

        # Si el resto de dividir el frame actual por 40 es 0 (ej: 40, 80, 120...)
        if frameN > 0 and (frameN % frame_change == 0):
            fixation_color_new = randchoice(fixation_possible_colors)
            while fixation_color_new==fixation_color_:
                fixation_color_new = randchoice(fixation_possible_colors)
            fixation_color_ = fixation_color_new
            thisExp.addData('color_change_time', t)
            thisExp.addData('color_change_to', fixation_color_)
    SoundComponent audiobook
      deviceLabel = Realtek
      forceEndRoutine = False
      hamming = False
      sound [set every repeat] = $audio_filename
      startVal [time (s)] = 0
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    PolygonComponent fixation
      fillColor [set every frame] = $fixation_color_
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = audiobook.status  == STARTED
      stopVal [condition] = audiobook.status  == FINISHED
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    ParallelOutComponent p_port_stimuli
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 125
      startVal [condition] = audiobook.status ==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Bips
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    SoundComponent bip
      deviceLabel = Realtek
      forceEndRoutine = False
      sound [set every repeat] = ../audiobook_stimuli/bip.wav
      startVal [time (s)] = 0
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    PolygonComponent polygon
      fillColor = white
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = bip.status == STARTED
      stopVal [condition] = bip.status == FINISHED
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    ParallelOutComponent p_port_bips
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 100
      startVal [condition] = pip.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Questionary
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    KeyboardComponent end_audiobook1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .5
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    TextComponent question_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [time (s)] = end_audiobook1.status == FINISHED
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      text [set every repeat]:
        ¿Cuántas veces apareció la cruz en color azul?








        Presiona ESPACIO para continuar
    ParallelOutComponent p_port_question_book
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 150
      startVal [condition] = question.status ==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Escribí con los números del teclado tu respuesta
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = end_audiobook1.status == FINISHED
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Flow
  Routine Instructions
  LoopInitiator audiobook_trials loopType="TrialHandler"
    conditionsFile = AudioBookLoop.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audiobook', '25_canelones'), ('stimuli', 'audio01.wav'), ('question1', '¿Cuál era el objetivo principal del narrador al hacer la llamada?'), ('answer_1_a', 'Conseguir dinero haciéndose pasar por un familiar.'), ('answer_1_b', 'Superar el récord de tiempo de duración de su amigo Chiri.'), ('answer_1_c', 'Vengarse de una vecina que los trataba mal.'), ('correct_answer_1', 'Superar el récord de tiempo de duración de su amigo Chiri.'), ('question2', '¿Qué detalle mencionó el narrador al final que hizo la broma especialmente cruel?'), ('answer_2_a', 'Le dijo a la señora que su hijo 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,
      OrderedDict([('audiobook', 'kafka'), ('stimuli', 'audio02.wav'), ('question1', '¿Por qué motivo Kafka comenzó a inventar la historia y escribir las cartas?'), ('answer_1_a', 'Para practicar un nuevo estilo de literatura infantil.'), ('answer_1_b', 'Porque la niña le pidió que le escribiera un cuento.'), ('answer_1_c', 'Para consolar a una niña que lloraba porque había perdido su muñeca.'), ('correct_answer_1', 'Para consolar a una niña que lloraba porque había perdido su muñeca.'), ('question2', '¿Cómo resuelve Kafka el final de la historia para que la niña deje de esperar a la muñeca?'), ('an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,
      OrderedDict([('audiobook', 'lugones'), ('stimuli', 'audio03.wav'), ('question1', '¿Qué fenómeno extraño ocurre en la ciudad según el cuento?'), ('answer_1_a', 'Una lluvia de partículas de cobre hirviendo.'), ('answer_1_b', 'Una inundación repentina de agua caliente.'), ('answer_1_c', 'Un terremoto que destruye las mansiones.'), ('correct_answer_1', 'Una lluvia de partículas de cobre hirviendo.'), ('question2', '¿Dónde se refugia Leopoldo cuando se da cuenta de que no puede huir?'), ('answer_2_a', 'En la terraza de su casa.'), ('answer_2_b', 'En una iglesia cercana.'), ('answer_2_c', 'En el sót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
    LoopInitiator trials_bip1 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      conditions:
        [OrderedDict([('AuxVar', np.int64(1))]),
        OrderedDict([('AuxVar', np.int64(2))]),
        OrderedDict([('AuxVar', np.int64(3))]),
        OrderedDict([('AuxVar', np.int64(4))]),
        OrderedDict([('AuxVar', np.int64(5))]),
        OrderedDict([('AuxVar', np.int64(6))]),
        OrderedDict([('AuxVar', np.int64(7))]),
        OrderedDict([('AuxVar', np.int64(8))]),
        OrderedDict([('AuxVar', np.int64(9))]),
        OrderedDict([('AuxVar', np.int64(10))]),
        OrderedDict([('AuxVar', np.int64(11))]),
        OrderedDict([('AuxVar', np.int64(12))]),
        OrderedDict([('AuxVar', np.int64(13))]),
        OrderedDict([('AuxVar', np.int64(14))]),
        OrderedDict([('AuxVar', np.int64(15))]),
        OrderedDict([('AuxVar', np.int64(16))]),
        OrderedDict([('AuxVar', np.int64(17))]),
        OrderedDict([('AuxVar', np.int64(18))]),
        OrderedDict([('AuxVar', np.int64(19))]),
        OrderedDict([('AuxVar', np.int64(20))])]
      Routine Bips
    LoopTerminator trials_bip1
    Routine AudioBook
    LoopInitiator trials_bip2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 10
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      Routine Bips
    LoopTerminator trials_bip2
    Routine Questionary
    Routine SpacebarContinue
  LoopTerminator audiobook_trials
  Routine LastPrompt
  Routine GoodBye
